PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Serial Position Effect_SoloProject
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine present_word
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $word
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  Routine recall
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    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = Type all the words you remember and press ENTER when done
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    TextboxComponent recall_box
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      End Routine:
        thisExp.addData('recalled_words', recall_box.text)
  Routine thankyou
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Thank you for participating!
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Flow
  LoopInitiator wordloop loopType="TrialHandler"
    conditionsFile = C:/Users/medha/OneDrive/Desktop/Lab In Psych/Solo Project/wordlist.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'word': 'apple'},
      {'word': 'chair'},
      {'word': 'music'},
      {'word': 'dream'},
      {'word': 'paper'},
      {'word': 'tiger'},
      {'word': 'window'},
      {'word': 'flower'},
      {'word': 'book'},
      {'word': 'lamp'},
      {'word': 'ocean'},
      {'word': 'phone'},
      {'word': 'candle'},
      {'word': 'spoon'},
      {'word': 'shoe'}]
    Routine present_word
  LoopTerminator wordloop
  Routine recall
  Routine thankyou
